WorkflowBuilder(Version=2.7.3)
Disable Bonsai.IO.StartProcess
  FileName=../../allen_env/scripts/python.exe
  Arguments='"C:\Users\neurogears\Documents\git\AllenND\raw_workflow\dynamic-foraging-task\src\foraging_gui\Foraging.py"'

GroupWorkflow Init
    BehaviorSubject<System.String> RewardOutcome
    BehaviorSubject<System.Object> RewardDeliveryLeft
    BehaviorSubject<System.Object> RewardDeliveryRight
    BehaviorSubject<System.Object> TrialEnd
    BehaviorSubject<System.Boolean> DelayStart
    BehaviorSubject<System.Boolean> GoCue

GroupWorkflow CreateOscClient
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC, Port=4002, NoDelay=false, AllowNatTraversal=true)
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC2, Port=4003, NoDelay=false, AllowNatTraversal=true)
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC3, Port=4004, NoDelay=false, AllowNatTraversal=true)
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC4, Port=4005, NoDelay=false, AllowNatTraversal=true)

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC)
    -> PublishSubject FromBonsaiOSC

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC2)
    -> PublishSubject FromBonsaiOSC2

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC4)
    -> PublishSubject FromBonsaiOSC4

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC3)
    -> PublishSubject FromBonsaiOSC3

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC2
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC2, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC3
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC3, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC4
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address="")

GroupWorkflow TrialLogic
    SubscribeSubject Start
    -> Take(Count=1) => #1
    SubscribeSubject ResponseTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #4
    SubscribeSubject RewardConsumeTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.fromSeconds(it)
    -> PropertyMapping(DueTime) => #7
    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #10
    #1, #10 -> SelectMany ITI
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(DueTime) => #3
        #2, #3 -> Delay(DueTime=PT3.588S)
        -> WorkflowOutput
    -> MulticastSubject DelayStart => #12
    SubscribeSubject DelayTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #15
    #12, #15 -> SelectMany DelayPeriod
        SubscribeSubject Licks
        -> BooleanProperty(Value=false) => #1
        WorkflowInput Source1 => #2
        ExternalizedMapping(DueTime) => #3
        #2, #3 -> Delay(DueTime=PT0.041S)
        -> BooleanProperty(Value=true) => #5
        #5, #1 -> Merge
        -> Take(Count=1)
        -> Condition "No Licks"
            WorkflowInput Source1
            -> WorkflowOutput
        -> Repeat
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject GoCue => #17
    #17, #4 -> SelectMany ResponseInterval
        SubscribeSubject Licks => #0
        ExternalizedMapping(DueTime)
        -> Timer(DueTime=PT1S, Period=PT0S)
        -> StringProperty(Value=NoResponse) => #3
        #3, #0 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Reward(Description=Reward)
        WorkflowInput Source1 => #0
        -> Condition LickLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #2
            SubscribeSubject IsLeftRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryLeft
            -> StringProperty(Value=RewardLeft) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorLeft) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition LickRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #4
            SubscribeSubject IsRightRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryRight
            -> StringProperty(Value=RewardRight) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorRight) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Miss
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #6
        Source2=#2, Source3=#4, Source5=#6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject RewardOutcome => #20
    #20, #7 -> SelectMany RewardConsumeTime
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Delay(DueTime=PT3S)
        -> WorkflowOutput
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> Repeat
    -> WorkflowOutput

GroupWorkflow Logging
    ExternalizedMapping(Value)
    -> StringProperty(Value=C:\Data)
    -> Take(Count=1) => #2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
      Expression: DateTime.Now.ToString("dd_MM_yyyy_HH_mm_ss")
    #2, #3 -> Zip
    -> Format(Format={0}\{1}, Selector="Item1,Item2")
    -> AsyncSubject RootPath

    Disable SubscribeSubject RewardOutcome => #7
    Disable SubscribeSubject RootPath
    -> Disable Format(Format={0}\RewardOutcome.csv, Selector=it)
    -> Disable PropertyMapping(FileName) => #10
    #7, #10 -> Disable Bonsai.IO.CsvWriter(FileName=C:\Data\28_04_2023_16_14_31\RewardOutcome.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)

    SubscribeSubject ToBonsaiOSC
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC)

    SubscribeSubject ToBonsaiOSC2
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC2)

    SubscribeSubject ToBonsaiOSC3
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC3)

    SubscribeSubject ToBonsaiOSC4
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC4)

    SubscribeSubject FromBonsaiOSC
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC)

    SubscribeSubject FromBonsaiOSC2
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC2)

    SubscribeSubject FromBonsaiOSC3
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC3)

    SubscribeSubject FromBonsaiOSC4
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC4)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=BehaviorEvents)

Disable GroupWorkflow Optogenetics
    SubscribeSubject Start => #0
    SubscribeSubject Location1Size
    -> IntProperty(Value=100)
    -> PropertyMapping(BufferSize) => #3
    SubscribeSubject Location2Size
    -> IntProperty(Value=100)
    -> PropertyMapping(BufferSize) => #6
    SubscribeSubject Trigger_Location1
    -> PropertyMapping(Value) => #8
    SubscribeSubject TriggerITIStart_Wave1
    -> PropertyMapping(Value) => #10
    #0, #10 -> SelectMany TriggerITI_Wave1 => #11
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1 or value ==2:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #11, #8 -> SelectMany Trigger_Location1 => #12
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #12, #3 -> SelectMany Wave1_Location1
        SubscribeSubject WaveForm1_1
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=100
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave1_1)
        -> WorkflowOutput
    SubscribeSubject Trigger_Location2
    -> PropertyMapping(Value) => #15
    #11, #15 -> SelectMany Trigger_Location2 => #16
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #16, #6 -> SelectMany Wave1_Location2
        SubscribeSubject WaveForm1_2
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=100
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave1_2)
        -> WorkflowOutput

    SubscribeSubject Start => #18
    SubscribeSubject Location1Size
    -> IntProperty(Value=100)
    -> PropertyMapping(BufferSize) => #21
    SubscribeSubject Location2Size
    -> IntProperty(Value=100)
    -> PropertyMapping(BufferSize) => #24
    SubscribeSubject TriggerITIStart_Wave2
    -> PropertyMapping(Value) => #26
    #18, #26 -> SelectMany TriggerITI_Wave2 => #27
        ExternalizedMapping(Value)
        -> IntProperty(Value=0)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1 or value ==2:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Trigger_Location2
    -> PropertyMapping(Value) => #29
    SubscribeSubject Trigger_Location1
    -> PropertyMapping(Value) => #31
    #27, #31 -> SelectMany Trigger_Location1 => #32
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #32, #21 -> SelectMany Wave2_Location1
        SubscribeSubject WaveForm2_1
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=100
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave2_1)
        -> WorkflowOutput
    #27, #29 -> SelectMany Trigger_Location2 => #34
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #34, #24 -> SelectMany Wave2_Location2
        SubscribeSubject WaveForm2_2
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=100
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave2_2)
        -> WorkflowOutput

    SubscribeSubject GoCue => #36
    SubscribeSubject Location1Size
    -> PropertyMapping(BufferSize) => #38
    SubscribeSubject Location2Size
    -> PropertyMapping(BufferSize) => #40
    SubscribeSubject TriggerGoCue_Wave1
    -> PropertyMapping(Value) => #42
    #36, #42 -> SelectMany TriggerGoCue_Wave1 => #43
        ExternalizedMapping(Value)
        -> IntProperty(Value=0)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1 or value ==2:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Trigger_Location1
    -> PropertyMapping(Value) => #45
    #43, #45 -> SelectMany Trigger_Location1 => #46
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #46, #38 -> SelectMany Wave1_Location1
        SubscribeSubject WaveForm1_1
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=25002
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave1_1)
        -> WorkflowOutput
    SubscribeSubject Trigger_Location2
    -> PropertyMapping(Value) => #49
    #43, #49 -> SelectMany Trigger_Location2 => #50
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #50, #40 -> SelectMany Wave1_Location2
        SubscribeSubject WaveForm1_2
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=25002
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave1_2)
        -> WorkflowOutput

    SubscribeSubject GoCue => #52
    SubscribeSubject Location1Size
    -> PropertyMapping(BufferSize) => #54
    SubscribeSubject Location2Size
    -> PropertyMapping(BufferSize) => #56
    SubscribeSubject TriggerGoCue_Wave2
    -> PropertyMapping(Value) => #58
    #52, #58 -> SelectMany TriggerGoCue_Wave2 => #59
        ExternalizedMapping(Value)
        -> IntProperty(Value=0)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1 or value ==2:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    SubscribeSubject Trigger_Location1
    -> PropertyMapping(Value) => #61
    #59, #61 -> SelectMany Trigger_Location1 => #62
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #62, #54 -> SelectMany Wave2_Location1
        SubscribeSubject WaveForm2_1
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=25002
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave2_1)
        -> WorkflowOutput
    SubscribeSubject Trigger_Location2
    -> PropertyMapping(Value) => #65
    #59, #65 -> SelectMany Trigger_Location2 => #66
        ExternalizedMapping(Value)
        -> IntProperty(Value=1)
        -> Take(Count=1)
        -> Bonsai.Scripting.IronPython.PythonSelectMany StartTrigger
          Script:
            import random

            @returns(bool)
            def process(value):

              if value ==1:
                 v = True
              else:
                 v = False

              yield v
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    #66, #56 -> SelectMany Wave2_Location2
        SubscribeSubject WaveForm2_2
        -> Take(Count=1) => #1
        ExternalizedMapping(BufferSize) => #2
        #1, #2 -> Bonsai.DAQmx.AnalogOutput
          SignalSource=""
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=25002
          Channels(AnalogOutputChannelConfiguration(ChannelName=Out, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts))
        -> IntProperty(Value=1)
        -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address=/FinishOfWave2_2)
        -> WorkflowOutput

GroupWorkflow "Hardware Outputs"
    GroupWorkflow Audio
        Bonsai.Audio.AudioReader(FileName=bell.wav, BufferLength=0, SampleRate=0)
        -> BehaviorSubject AudioWaveform

        SubscribeSubject GoCue
        -> SelectMany "Play sound"
            SubscribeSubject AudioWaveform
            -> Bonsai.Audio.AudioPlayback(SampleRate=44100, State=Playing)
            -> Last
            -> Take(Count=1)
            -> WorkflowOutput

            BooleanProperty(Value=true)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Port0)
            -> MulticastSubject BehaviorCommands

    GroupWorkflow RewardControl
        Disable SubscribeSubject RewardDeliveryLeft
        -> Disable IntProperty(Value=0) => #1
        Disable SubscribeSubject ManualWater_Left => #2
        #2, #1 -> Disable Merge
        -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke0Valve)
        -> Disable MulticastSubject BehaviorCommands

        Disable SubscribeSubject RewardDeliveryRight
        -> Disable IntProperty(Value=0) => #7
        Disable SubscribeSubject ManualWater_Right => #8
        #8, #7 -> Disable Merge
        -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke1Valve)
        -> Disable MulticastSubject BehaviorCommands

        Disable SubscribeSubject LeftValueSize
        -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
        -> Disable MulticastSubject BehaviorCommands

        Disable SubscribeSubject RightValueSize
        -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke1Valve)
        -> Disable MulticastSubject BehaviorCommands

        SubscribeSubject RewardDeliveryLeft
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke0Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RewardDeliveryRight
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke1Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject ManualWater_Left
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke0Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject ManualWater_Right
        -> Bonsai.Harp.CF.BehaviorCommand(Type=ToggleOutput, Mask=Poke1Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject LeftValueSize
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RightValueSize
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke1Valve)
        -> MulticastSubject BehaviorCommands

    SubscribeSubject Start
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital0)
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT1S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital0)
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputSet) => #9
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #14
        WorkflowInput Source1
        -> WorkflowOutput
    #14, #9 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/TrialStartTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject DelayStart
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT1S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital1)
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputSet) => #27
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO1))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #32
        WorkflowInput Source1
        -> WorkflowOutput
    #32, #27 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/DelayStartTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject TrialEnd
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital3)
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT1S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Digital3)
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputSet) => #45
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO3))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #50
        WorkflowInput Source1
        -> WorkflowOutput
    #50, #45 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/TrialEndTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputToggle) => #57
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #62
        WorkflowInput Source1
        -> WorkflowOutput
    #62, #57 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/LeftRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputToggle) => #69
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort1))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #74
        WorkflowInput Source1
        -> WorkflowOutput
    #74, #69 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/RightRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    Disable BehaviorSubject<Bonsai.Harp.HarpMessage> Commands
    -> Disable Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx)

    SubscribeSubject GoCue
    -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Port2)
    -> MulticastSubject BehaviorCommands
    -> Delay(DueTime=PT0.005S)
    -> Bonsai.Harp.CF.BehaviorCommand(Type=ClearOutput, Mask=Port2)
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputSet) => #89
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DOPort2))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #94
        WorkflowInput Source1
        -> WorkflowOutput
    #94, #89 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/GoCueTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    Disable SubscribeSubject BehaviorEvents
    -> Disable Harp.Behavior.Parse(MessageType=Write, Register=Harp.Behavior.TimestampedOutputToggle) => #101
    -> Disable MemberSelector(Selector=Value)
    -> Disable BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DOPort2))
    -> Disable GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Disable DistinctUntilChanged
    -> Disable Condition => #106
        WorkflowInput Source1
        -> WorkflowOutput
    #106, #101 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2.Seconds)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Disable Bonsai.Osc.Format(Address=/GoCueTimeHarp)
    -> Disable MulticastSubject ToBonsaiOSC

    Disable Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreateOutputPulseEnablePayload(MessageType=Write, Value=DOPort2))
    -> Disable MulticastSubject BehaviorCommands
    -> Disable Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreatePulseDOPort2Payload(MessageType=Write, Value=10))
    -> Disable MulticastSubject BehaviorCommands

    Disable SubscribeSubject GoCue
    -> Disable Harp.Behavior.CreateMessage(Payload=Harp.Behavior.CreateOutputTogglePayload(MessageType=Write, Value=DOPort2))
    -> Disable MulticastSubject BehaviorCommands

GroupWorkflow HardwareInputs
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
    -> PublishSubject BehaviorEvents

    SubscribeSubject BehaviorEvents
    -> Bonsai.Harp.FilterMessage(MessageType=Event, Register=Bonsai.Harp.FilterMessageAddress(Address=44))
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #5
    Disable Timer(DueTime=PT0S, Period=PT0.01S)
    -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalSeconds) => #8
    #5, #8 -> Disable Merge
    -> BehaviorSubject Timestamps

    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
    -> PublishSubject LeftKeyPress
    -> StringProperty(Value=Left) => #13
    Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
    -> PublishSubject RightKeyPress
    -> StringProperty(Value=Right) => #16
    SubscribeSubject BehaviorEvents
    -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterInputs, Mask=Port0)
    -> MemberSelector(Selector=Seconds)
    -> PublishSubject LeftLickTime
    -> StringProperty(Value=Left) => #21
    SubscribeSubject BehaviorEvents
    -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterInputs, Mask=Port1)
    -> MemberSelector(Selector=Seconds)
    -> PublishSubject RightLickTime
    -> StringProperty(Value=Right) => #26
    #13, #16, #21, #26 -> Merge
    -> PublishSubject Licks

    Disable SubscribeSubject BehaviorEvents
    -> Disable Condition IgnoreAnalog => #30
        WorkflowInput Source1
        -> MemberSelector(Selector=Address)
        -> NotEqual(Operand=IntProperty(Value=44))
        -> WorkflowOutput
    -> Disable Condition LeftLick
        WorkflowInput Source1
        -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port0)
        -> WorkflowOutput
    -> Disable Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> Disable Bonsai.IO.CsvWriter(FileName=LickLeft.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
    -> Disable PublishSubject LeftLickTime
    -> Disable StringProperty(Value=Left)
    #30 -> Disable Condition RightLick
        WorkflowInput Source1
        -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Port1)
        -> WorkflowOutput
    -> Disable Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
    -> Disable Bonsai.IO.CsvWriter(FileName=LickRight.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
    -> Disable PublishSubject RightLickTime
    -> Disable StringProperty(Value=Right)

GroupWorkflow Parameters
    GroupWorkflow ReadFromOsc
        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/LeftValueSize, TypeTag=f)
        -> BehaviorSubject LeftValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RightValueSize, TypeTag=f)
        -> BehaviorSubject RightValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RewardConsumeTime, TypeTag=f)
        -> BehaviorSubject RewardConsumeTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Left_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsLeftRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Right_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsRightRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/start, TypeTag=i)
        -> PublishSubject Start

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ITI, TypeTag=f)
        -> BehaviorSubject ITI

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DelayTime, TypeTag=f)
        -> BehaviorSubject DelayTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ResponseTime, TypeTag=f)
        -> BehaviorSubject ResponseTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave1, TypeTag=i)
        -> PublishSubject TriggerITIStart_Wave1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave2, TypeTag=i)
        -> PublishSubject TriggerITIStart_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location1, TypeTag=i)
        -> PublishSubject Trigger_Location1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location2, TypeTag=i)
        -> PublishSubject Trigger_Location2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave1, TypeTag=i)
        -> PublishSubject TriggerGoCue_Wave1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave2, TypeTag=i)
        -> PublishSubject TriggerGoCue_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Location1Size, TypeTag=i)
        -> PublishSubject Location1Size

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Location2Size, TypeTag=i)
        -> PublishSubject Location2Size

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_1, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=1, Rows=1)
        -> BehaviorSubject WaveForm1_1

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm2_1, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> BehaviorSubject WaveForm2_1

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_2, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> BehaviorSubject WaveForm1_2

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm2_2, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> BehaviorSubject WaveForm2_2

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Left, TypeTag=i)
        -> PublishSubject ManualWater_Left

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Right, TypeTag=i)
        -> PublishSubject ManualWater_Right

    GroupWorkflow WriteToOsc
        SubscribeSubject Timestamps => #0
        SubscribeSubject RightLickTime => #1
        #1, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RightLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject Timestamps => #7
        SubscribeSubject LeftLickTime => #8
        #8, #7 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/LeftLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject Timestamps => #14
        SubscribeSubject Start => #15
        #15, #14 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/TrialStartTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject Timestamps => #21
        SubscribeSubject DelayStart => #22
        #22, #21 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/DelayStartTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject Timestamps => #28
        SubscribeSubject GoCue => #29
        #29, #28 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/GoCueTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject Timestamps => #35
        SubscribeSubject RewardOutcome => #36
        #36, #35 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RewardOutcomeTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject Timestamps => #42
        SubscribeSubject TrialEnd => #43
        #43, #42 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/TrialEndTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject Timestamps => #49
        SubscribeSubject LeftKeyPress => #50
        #50, #49 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/LeftLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject Timestamps => #56
        SubscribeSubject RightKeyPress => #57
        #57, #56 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RightLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject Timestamps => #63
        SubscribeSubject RewardDeliveryRight => #64
        #64, #63 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RightRewardDeliveryTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject Timestamps => #70
        SubscribeSubject RewardDeliveryLeft => #71
        #71, #70 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/LeftRewardDeliveryTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject RewardOutcome
        -> Bonsai.Osc.Format(Address=/RewardOutcome)
        -> Disable Bonsai.Osc.SendMessage(Connection=BonsaiOSC, Address=/RewardOutcome)
        -> MulticastSubject ToBonsaiOSC

Disable Defer UnitTest
    Bonsai.IO.StartProcess(FileName=../../allen_env/scripts/python.exe, Arguments=../foraging_gui/Test.py)

    SubscribeSubject FromBonsaiOSC
    -> Bonsai.Osc.Parse(Address=/StartTest, TypeTag=s)
    -> SelectMany Echo => #3
        IntProperty(Value=0)
        -> Bonsai.Osc.Format(Address=/Test)
        -> MulticastSubject ToBonsaiOSC
        -> StringProperty(Value=Hi)
        -> Bonsai.Osc.Format(Address=/Test2)
        -> MulticastSubject ToBonsaiOSC
        -> IntProperty(Value=0)
        -> Bonsai.Osc.Format(Address=/Test)
        -> MulticastSubject ToBonsaiOSC2
        -> StringProperty(Value=HiBack)
        -> Bonsai.Osc.Format(Address=/Test2)
        -> MulticastSubject ToBonsaiOSC2
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject FromBonsaiOSC
    -> Bonsai.Osc.Parse(Address=/EndTest, TypeTag=s) => #5
    #3, #5 -> TakeUntil
    -> Delay(DueTime=PT5S)
    -> StringProperty(Value="Passed Test!")
    -> WorkflowOutput

Disable GroupWorkflow Debug
    Disable SubscribeSubject Timestamps => #0
    Disable SubscribeSubject DelayStart => #1
    #1, #0 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Disable Bonsai.Osc.Format(Address=/DelayStartTime)
    -> Disable MulticastSubject ToBonsaiOSC

GroupWorkflow ToOsc
    SubscribeSubject ToBonsaiOSC => #0
    -> IntProperty(Value=1) => #1
    #1, #0 -> Zip => #2
    SubscribeSubject ToBonsaiOSC2 => #3
    -> IntProperty(Value=2) => #4
    #4, #3 -> Zip => #5
    SubscribeSubject ToBonsaiOSC3 => #6
    -> IntProperty(Value=3) => #7
    #7, #6 -> Zip => #8
    SubscribeSubject ToBonsaiOSC4 => #9
    -> IntProperty(Value=4) => #10
    #10, #9 -> Zip => #11
    #11, #8, #5, #2 -> Merge
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #12
GroupWorkflow FromOsc
    SubscribeSubject FromBonsaiOSC => #0
    -> IntProperty(Value=1) => #1
    #1, #0 -> Zip => #2
    SubscribeSubject FromBonsaiOSC2 => #3
    -> IntProperty(Value=2) => #4
    #4, #3 -> Zip => #5
    SubscribeSubject FromBonsaiOSC3 => #6
    -> IntProperty(Value=3) => #7
    #7, #6 -> Zip => #8
    SubscribeSubject FromBonsaiOSC4 => #9
    -> IntProperty(Value=4) => #10
    #10, #9 -> Zip => #11
    #11, #8, #5, #2 -> Merge
    -> WorkflowOutput
-> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #14
#14, #12 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
